
global:
    # list of modules to load when starting
    startup: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    # remote_modules_server:
    #     address: 'localhost'
    #     port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    default_data_dir: '~/dev/myQudi/data/'

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

hardware:

    lecroy_hardware:
        module.Class: 'lecroy_hardware.Lecroy'
        options:
            ip_address: '10.140.1.221'

logic:

    lecroy_logic:
        module.Class: 'lecroy_logic.LecroyLogic'
        connect:
            scope1: 'lecroy_hardware'
        options:
            measurement_timing: 100.0 # in miliseconds
            channel: 'C1'
            #channel_resolution: 250002
            #channelc2: 'C2'
            #channelc2_resolution: 250002
            #channelc3: 'C3'
            #channelc3_resolution: 250002
       
gui:

    lecroy_gui:
        module.Class: 'lecroy_gui.lecroy_gui.LeCroyGui'
        connect:
            lecroylogic: 'lecroy_logic'
        options:
            atom: 'Rb'
            line: 'D1'
            bfield: 0
            temperature: 21
            lcell: 0.1